PsychoPy2experiment version="2026.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = TrainingTask_Test
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine WelcomeScreen
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Irá iniciar a tarefa. A mesma consiste na apresentação de um contraste à direita/esquerda. Indique em cada trial o lado do estímulo utilizando a tecla -s- para o lado esquerdo e  -l- para o lado direito

        Pressione a SPACEBAR para começar
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GoodbyeScreen
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Obrigado pela sua participação
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  Routine Blank4000
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine TrainingTrials
    PolygonComponent polygonVertical
      fillColor = white
      lineColor = $(0.0000, 0.0000, 0.0000)
      lineWidth [set every frame] = fixation_width
      ori [set every frame] = 90
      pos [set every frame] = fixation_pos
      saveStartStop = False
      shape = rectangle
      size [set every frame] = fixation_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = deg
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
    PolygonComponent polygonHorizontal
      fillColor = white
      lineColor = $(0.0000, 0.0000, 0.0000)
      lineWidth [set every frame] = fixation_width
      ori [set every frame] = 180
      pos [set every frame] = fixation_pos
      saveStartStop = False
      shape = rectangle
      size [set every frame] = fixation_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = deg
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    GratingComponent grating100or50
      contrast [set every repeat] = grating
      mask = gauss
      phase = 5
      pos [set every frame] = position
      sf = 1
      size [set every frame] = size
      startVal [time (s)] = 1.00
      stopVal [duration (s)] = 3.00
      tex = sin
      texture resolution = 256
      units = deg
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    KeyboardComponent keySide
      allowedKeys = 's','l'
      correctAns = $correct_ans
      forceEndRoutine = True
      startVal [time (s)] = 1.00
      stopVal [duration (s)] = 3
      storeCorrect = True
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Flow
  Routine WelcomeScreen
  Routine Blank4000
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Components_parameters.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'position': (15, 0), 'grating': 1, 'size': (7, 7), 'correct_ans': 'l', 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
      {'position': (-15, 0), 'grating': 0.5, 'size': (7, 7), 'correct_ans': 'l', 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
      {'position': (15, 0), 'grating': 1, 'size': (7, 7), 'correct_ans': 'l', 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
      {'position': (-15, 0), 'grating': 0.5, 'size': (7, 7), 'correct_ans': 'l', 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
      {'position': (15, 0), 'grating': 1, 'size': (7, 7), 'correct_ans': 'l', 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
      {'position': (-15, 0), 'grating': 0.5, 'size': (7, 7), 'correct_ans': 'l', 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
      {'position': (15, 0), 'grating': 1, 'size': (7, 7), 'correct_ans': 'l', 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
      {'position': (15, 0), 'grating': 0.5, 'size': (7, 7), 'correct_ans': 'l', 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
      {'position': (-15, 0), 'grating': 1, 'size': (7, 7), 'correct_ans': 'l', 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08},
      {'position': (15, 0), 'grating': 0.5, 'size': (7, 7), 'correct_ans': 'l', 'fixation_pos': (0, 0), 'fixation_size': (2, 0.1), 'fixation_width': 0.08}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
    Routine TrainingTrials
  LoopTerminator trials
  Routine Blank4000
  Routine GoodbyeScreen
